# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: ThorLabs_K10CR1

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: ThorLabs_K10CR1

# General VISA settings for the instrument.
[VISA settings]
str_value_out: %.6f
term_char: CR
send_end_on_write: True
baud_rate: 115200
# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True
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
#USB\VID_0403&PID_FAF0\55000409




[Current Position]
datatype: DOUBLE
unit: Degree/Second
permission:READ
set_cmd: SET,2,<*>
#def_value: 0.000

[Velocity]
datatype: DOUBLE
def_value: 10.000
unit: Degree/Second
low_lim: 0.000
high_lim: 10.000
permission:WRITE

[Move To]
datatype: DOUBLE
def_value: 0.000		
unit: Degree
low_lim: 0.000
high_lim: 360.000
permission:WRITE

#[Acceleration]
#datatype: DOUBLE
#unit: Degree/Second/Second
#permission:WRITE
#set_cmd: SET,2,<*>
#def_value: 9.999

#[MinimumVelocity]
#datatype: DOUBLE
#unit: Degree/Second
#permission:WRITE
#set_cmd: SET,2,<*>
#def_value: 0.000
